CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20130614030205

LoadImages:[module_num:1|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notes:['Load the DIC image and any fluorescence images used to supplement it. Also extract metadata about the image.', 'Q-SCAn Program: The metadata fields will be overridden unless the manual setting is checked.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Corrected Images
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):ChD-T3
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DIC
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch2-T3
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:MTSmCer
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch3-T1
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:NLStdTom
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    Rescale intensities?:No

Smooth:[module_num:2|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notes:['Subtly smooth the DIC image to remove noise that interferes with downstream processing steps. Edge preservation is important for the next steps. The edge intensity difference is empirically-determined, and would necessarily be dependent on the DIC images taken.']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
    Select the input image:DIC
    Name the output image:DICSmoothed
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:Yes
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    Edge intensity difference:0.01

EnhanceEdges:[module_num:3|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notes:['This module finds the edges in the smoothed DIC image using the Laplacian of Gaussian method. This provides a second way of extracting cell information from the DIC image which is complementary too the prior method.']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
    Select the input image:DICSmoothed
    Name the output image:DICSmoothedEdged
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:1
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
EnhanceOrSuppressFeatures:[module_num:4|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notes:['Same idea as the previous EnhanceOrSuppressFeatures module, but using the edged DIC image instead of the DIC image itself. Fewer internal bright spots exist using this method, so the hole sizes are larger.']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
    Select the input image:DICSmoothedEdged
    Name the output image:DICSmoothedEdgedEnhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:15,75
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
ApplyThreshold:[module_num:5|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notes:['Same idea as the previous ApplyThreshold module. A Otsu with two classes are used instead because the number of artifacts outside of actual cells is reduced.']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
    Select the input image:DICSmoothedEdgedEnhanced
    Name the output image:DICSmoothedEdgedEnhancedBinary
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.001,0.01
    Threshold correction factor:1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:["This module finds 'dark holes' in the smoothed DIC images, making them bright and setting all other pixels to 0. These 'dark holes' are depressed areas fully contained within a boundary of lighter pixels. The reason the 'range of hole sizes' is relatively small and narrow is because cells have internal bright spots which are seen as a boundary of a hole."]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
    Select the input image:DICSmoothed
    Name the output image:DICSmoothedEnhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:10,20
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
ApplyThreshold:[module_num:7|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notes:["The dark hole image will have bright areas which mostly match yeast cells (or possibly some debris), typically the cell boundry's shadow and some other internal shadows. These will be different brightnesses, depending on the size and brightness of the bounding bright pixels. The difference in intensity doesn't provide useful information for us, so we'll convert them all to binary, using a threshold calculated via Otsu with three classes, weighted variance mode, assigning the middle class to the background. The threshold bounds help protect the results of the algorithm from going far out of wack."]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
    Select the input image:DICSmoothedEnhanced
    Name the output image:DICSmoothedEnhancedBinary
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.001,0.01
    Threshold correction factor:1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Smooth:[module_num:8|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notes:['Smooth the first supplemental fluorescence image using a median filter. This helps reduce the single-pixel noise and makes the denser cellular intensity stand out.']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
    Select the input image:MTSmCer
    Name the output image:MTSmCerSmoothed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:5.0
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
Smooth:[module_num:9|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notes:['Sometimes the mCer channel has high background signal, often spread non-uniformly throughout the image. This allows some of this information to be captured for correction.']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
    Select the input image:MTSmCerSmoothed
    Name the output image:MTSmCerBackground
    Select smoothing method:Fit Polynomial
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
ImageMath:[module_num:10|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notes:['Corred']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MTSmCerSmoothedLessBackground
    Image or measurement?:Image
    Select the first image:MTSmCerSmoothed
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:MTSmCerBackground
    Multiply the second image by:1
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
ApplyThreshold:[module_num:11|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
    Select the input image:MTSmCerSmoothedLessBackground
    Name the output image:MTSmCerSmoothedThresholded
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.002,0.02
    Threshold correction factor:1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Morph:[module_num:12|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notes:['Even with the prior smoothing, the threshold is low enough to be impacted by noise, resulting in spurs and other odd artifacts. Opening once and then performing a majority operation helps remove remaining noise from the medium and slightly rounds the objects.']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
    Select the input image:MTSmCerSmoothedThresholded
    Name the output image:MTSmCerSmoothedThresholdedMorphed
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:3
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:3

Smooth:[module_num:13|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notes:['Smooth the second supplemental fluorescence image using a median filter. This helps reduce the single-pixel noise and makes the denser cellular intensity stand out.']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
    Select the input image:NLStdTom
    Name the output image:NLStdTomSmoothed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:5.0
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
ApplyThreshold:[module_num:14|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notes:['Convert the supplemental fluorescence image to binary, using an empirically-determined threshold value which assigns most background pixels to 0, but assigns most cellular autofluorescence and true fluorescence to 1. This is because the information we care about from here is "cell" or "not cell".']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
    Select the input image:NLStdTomSmoothed
    Name the output image:NLStdTomSmoothedThresholded
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.002,0.01
    Threshold correction factor:1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Morph:[module_num:15|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notes:['Even with the prior smoothing, the threshold is low enough to be impacted by noise, resulting in spurs and other odd artifacts. Opening once and then performing a majority operation helps remove remaining noise from the medium and slightly rounds the objects.']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
    Select the input image:NLStdTomSmoothedThresholded
    Name the output image:NLStdTomSmoothedThresholdedMorphed
    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:3
    Select the operation to perform:majority
    Number of times to repeat operation:Once
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    Scale:3

ImageMath:[module_num:16|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notes:['Combine information from the main DIC channels and the supplemntary fluorescence. The edged-DIC-originated information  more closely aligns with the real border of the cell. However, a few cells have a weak border, which extends the signal several pixels beyond the cell walls. Little can be done about it at this stage. The DIC-originated information is generally slightly bigger than the boundary of the cell, so we weight it as half. The supplemental fluorescence-originated information is probably about the right size for the cell, but may be less regularly shaped. Some cells are found by one channel but not others, and some methods can miss some cell information. The combination of these information channels results in more robust cell-finding.']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
    Operation:Maximum
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DICProcessed
    Image or measurement?:Image
    Select the first image:DICSmoothedEdgedEnhancedBinary
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DICSmoothedEnhancedBinary
    Multiply the second image by:0.5
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    Image or measurement?:Image
    Select the third image:NLStdTomSmoothedThresholdedMorphed
    Multiply the third image by:0.5
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    Image or measurement?:Image
    Select the fourth image:MTSmCerSmoothedThresholdedMorphed
    Multiply the fourth image by:1
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
Smooth:[module_num:17|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notes:['IdentifyObjects modules require a gradient to reliably detect objects. Applying a Gaussian filter achieves this.']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
    Select the input image:DICProcessed
    Name the output image:DICProcessedSmoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:5.0
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
IdentifyPrimaryObjects:[module_num:18|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notes:["Using the previously-obtained cell information, we find the cell objects using a threshold of 0.4, since our information ranges from 0 to 1 per pixel and the body of each cell is 1 and falls off (due to Gaussian smoothing) to 0 over several pixels. Clumped objects are separated liberally using intensity and rejoined in the next module. A few very close cells won't have an intensity difference between them and so won't be separated by this method."]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
    Select the input image:DICProcessedSmoothed
    Name the primary objects to be identified:CellsPreliminary
    Typical diameter of objects, in pixel units (Min,Max):25,100
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Manual
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Manual threshold:0.4
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
UnifyObjectsByShape:[module_num:19|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notes:['IdentifyPrimaryObjects is a bit too agressive in separating clumped cells. This module detects those which should likely be rejoined and merges them.']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
    Select the input objects:CellsPreliminary
    Name the new objects:CellsPreliminaryUnified
    Retain outlines of the relabeled objects?:No
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    Window size:10
    Threshold:0.5

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:CellsPreliminaryUnified
    Calculate the Zernike features?:No

FilterObjects:[module_num:21|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notes:["Filter out 'cells' which are too small to be cells."]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
    Name the output objects:Cells
    Select the object to filter:CellsPreliminaryUnified
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:150
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:22|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
    Name the output objects:CellsWhole
    Select the object to filter:Cells
    Filter using classifier rules or measurements?:Image or mask border
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    Retain outlines of the identified objects?:No
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    Additional object count:0
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
MeasureObjectSizeShape:[module_num:23|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
    Select objects to measure:CellsWhole
    Calculate the Zernike features?:No

FilterObjects:[module_num:24|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notes:['Remove oddly-shaped cell objects based on a set of rules determined using CellProfiler Analyst. These are either not actually cells or are partial cells.']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
    Name the output objects:CellsWholeGood
    Select the object to filter:CellsWhole
    Filter using classifier rules or measurements?:Rules
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    Retain outlines of the identified objects?:No
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    Rules file location:Default Input Folder sub-folder|..
    Rules file name:BadCellObjectFilterRules.txt
    Class number:1
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    Additional object count:0
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
ExpandOrShrinkObjects:[module_num:25|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notes:['Expand the unfiltered cells by 5 pixels for finding the background of the image.']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
    Select the input objects:Cells
    Name the output objects:CellsExpanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:No
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
ConvertObjectsToImage:[module_num:26|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notes:['Convert the expanded objects to a binary image for background finding.']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
    Select the input objects:CellsExpanded
    Name the output image:CellsExpandedObjects
    Select the color type:Binary (black & white)
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
ImageMath:[module_num:27|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notes:['Invert the expanded unfiiltered cell objects. This is the background section of the image.']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Background
    Image or measurement?:Image
    Select the first image:CellsExpandedObjects
    Multiply the first image by:1
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    Image or measurement?:Image
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
SaveImages:[module_num:28|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notes:['Save the filtered cell objects.', "Q-SCAn Program: The portion of the file name in the parentheses will be overridden unless the manual setting is checked. The prefix can be replaced, just don't include extra parentheses."]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
    Select the type of image to save:Objects
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    Select the objects to save:CellsWholeGood
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    Select method for constructing file names:Single name
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    Enter single file name:Cells (\\\\g<Strain> - \\\\g<Field>)
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    Select file format to use:png
    Output file location:Default Input Folder sub-folder|Objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:29|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notes:['Save the background image - no need to save as an object first.', "Q-SCAn Program: The portion of the file name in the parentheses will be overridden unless the manual setting is checked. The prefix can be replaced, just don't include extra parentheses."]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
    Select the type of image to save:Image
    Select the image to save:Background
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    Select method for constructing file names:Single name
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    Enter single file name:Background (\\\\g<Strain> - \\\\g<Field>)
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    Select file format to use:png
    Output file location:Default Input Folder sub-folder|Objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
