CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20130614030205

LoadImages:[module_num:1|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notes:['Load the fluorescence channels used to define the compartments.', 'Q-SCAn Program: The metadata fields will be overridden unless the manual setting is checked.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Corrected Images
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Ch3-T1
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:NLStdTom
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch2-T3
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:MTSmCer
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    Rescale intensities?:No

LoadImages:[module_num:2|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notes:['Load the cell and background objects.', 'Q-SCAn Program: The metadata fields will be overridden unless the manual setting is checked.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Objects
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Cells (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Cells
    Retain outlines of loaded objects?:No
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    Text that these images have in common (case-sensitive):Background (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Background
    Retain outlines of loaded objects?:No
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
MeasureImageIntensity:[module_num:3|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notes:['Measure the intensity of the background of each image.']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
    Select the image to measure:NLStdTom
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Background
    Select the image to measure:MTSmCer
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Background

ImageMath:[module_num:4|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notes:['Subtract 5 times the mean noise level from the first fluorescence image. This will make compartment-finding more robust.']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NLStdTomLessNoise
    Image or measurement?:Image
    Select the first image:NLStdTom
    Multiply the first image by:1
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    Image or measurement?:Measurement
    Select the second image:NLStdTom
    Multiply the second image by:5.0
    Measurement:Intensity_MeanIntensity_NLStdTom_Background

ImageMath:[module_num:5|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notes:['Subtract 5 times the mean noise level from the second fluorescence image. This will make compartment-finding more robust.']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MTSmCerLessNoise
    Image or measurement?:Image
    Select the first image:MTSmCer
    Multiply the first image by:1
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    Image or measurement?:Measurement
    Select the second image:NLStdTom
    Multiply the second image by:5.0
    Measurement:Intensity_MeanIntensity_MTSmCer_Background

MeasureImageIntensity:[module_num:6|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notes:['Measure the image intensity within the cell objects after background subtraction.']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
    Select the image to measure:NLStdTomLessNoise
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Cells
    Select the image to measure:MTSmCerLessNoise
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Cells

SaveImages:[module_num:7|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notes:['Save the corrected images.']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
    Select the type of image to save:Image
    Select the image to save:NLStdTomLessNoise
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    Select method for constructing file names:From image filename
    Select image name for file prefix:NLStdTom
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:tif
    Output file location:Default Output Folder sub-folder|Fully Corrected Images
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:8|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notes:['Save the corrected images.']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
    Select the type of image to save:Image
    Select the image to save:MTSmCerLessNoise
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    Select method for constructing file names:From image filename
    Select image name for file prefix:MTSmCer
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:tif
    Output file location:Default Output Folder sub-folder|Fully Corrected Images
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:9|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notes:['Export the image intensity measurements. These values will be used to compute a cross-dataset mean intensity to normalize the intensities.', "Q-SCAn Program: The exported metadata fields will be automatically set unless the manual setting is checked. Please don't change the file name, unless you turn off completion detection."]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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Output Data
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Intensity_TotalIntensity_MTSmCerLessNoise_Cells,Image|Intensity_TotalIntensity_NLStdTomLessNoise_Cells,Image|Intensity_TotalArea_MTSmCerLessNoise_Cells,Image|Intensity_TotalArea_NLStdTomLessNoise_Cells,Image|Metadata_Strain,Image|Metadata_Field
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Within-Cell Image Intensities for Normalization.csv
    Use the object name for the file name?:No
