CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20130722225601

LoadImages:[module_num:1|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notes:['Load the fluorescence channels used for compartment identification.', 'Q-SCAn Program: The metadata fields will be overridden unless the manual setting is checked.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Fully Corrected Images
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Ch3-T1
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:NLStdTom
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch2-T3
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:MTSmCer
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    Rescale intensities?:No

LoadImages:[module_num:2|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notes:['Load the cell objects.', 'Q-SCAn Program: The metadata fields will be overridden unless the manual setting is checked.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder sub-folder|Objects
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Cells (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Cells
    Retain outlines of loaded objects?:No
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
LoadData:[module_num:3|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notes:['Q-SCAn Program: Load the computed normalization values.', 'If not using the program, you will should remove this module and manually set the values in RescaleIntensity based on the data output by the previous pipeline.']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
    Input data file location:Default Input Folder sub-folder|Output Data
    Name of the file:Within-Cell Image Intensities for Normalization.csv
    Load images based on this data?:No
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    Process just a range of rows?:No
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    Group images by metadata?:No
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
RescaleIntensity:[module_num:4|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notes:['Normalize the image so that the mean of the intensities within cells for the fluorophor = 0.01. This value is determined by dividing the cross-dataset intensity sum and area sum to find the mean cellular intensity for the marker. This number must be multiplied by 100 and entered here.']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
    Select the input image:NLStdTom
    Name the output image:NLStdTomNormalized
    Select rescaling method:Divide each image by a previously calculated value
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    Select the measurement to use as a divisor:DatasetAverageIntensity_NLStdTomLessNoise

RescaleIntensity:[module_num:5|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notes:['Normalize the image so that the mean of the intensities within cells for the fluorophor = 0.01. This value is determined by dividing the cross-dataset intensity sum and area sum to find the mean cellular intensity for the marker. This number must be multiplied by 100 and entered here.']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
    Select the input image:MTSmCer
    Name the output image:MTSmCerNormalized
    Select rescaling method:Divide each image by a previously calculated value
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    Select the measurement to use as a divisor:DatasetAverageIntensity_MTSmCerLessNoise

MeasureObjectIntensity:[module_num:6|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
    Hidden:2
    Select an image to measure:NLStdTomNormalized
    Select an image to measure:MTSmCerNormalized
    Select objects to measure:Cells

FilterObjects:[module_num:7|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notes:['Remove cells with very low expression of the compartment-defining fluorescence channel. Based on normalized images.']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
    Name the output objects:CellsFilteredByLowNLStdTom
    Select the object to filter:Cells
    Filter using classifier rules or measurements?:Rules
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    Retain outlines of the identified objects?:No
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    Rules file location:Default Input Folder sub-folder|..
    Rules file name:LowNLStdTomFluorescenceFilterRules.txt
    Class number:1
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    Additional object count:0
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
FilterObjects:[module_num:8|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notes:['Remove cells with very low expression of the compartment-defining fluorescence channel.']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
    Name the output objects:CellsFilteredByLowMTSmCer
    Select the object to filter:Cells
    Filter using classifier rules or measurements?:Rules
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    Retain outlines of the identified objects?:No
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    Rules file location:Default Input Folder sub-folder|..
    Rules file name:LowMTSmCerFluorescenceFilterRules.txt
    Class number:1
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    Additional object count:0
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
MaskObjects:[module_num:9|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notes:['Combine the filitering results to retain only those cells with appreciable expression of the compartment-defining markers.']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
    Select objects to be masked:CellsFilteredByLowNLStdTom
    Name the masked objects:CellsFilteredByLowMarkerIntensity
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object(s):CellsFilteredByLowMTSmCer
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

Smooth:[module_num:10|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notes:['Smooth the image to remove the effect of noise.']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
    Select the input image:NLStdTomNormalized
    Name the output image:NLStdTomNormalizedSmoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2.0
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
MaskImage:[module_num:11|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notes:['Mask the image by the cell objects to allow per-object thresholding.']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
    Select the input image:NLStdTomNormalizedSmoothed
    Name the output image:NLStdTomNormalizedSmoothedMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsFilteredByLowMarkerIntensity
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:12|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notes:['Find nuclei objects.']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
    Select the input image:NLStdTomNormalizedSmoothedMasked
    Name the primary objects to be identified:NucleiPreliminary
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu PerObject
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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    Handling of objects if excessive number of objects identified:Continue
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
RelateObjects:[module_num:13|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notes:['Relate the nuclei objects to the parent cells.']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
    Select the input child objects:NucleiPreliminary
    Select the input parent objects:CellsFilteredByLowMarkerIntensity
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:No
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
ReassignObjectNumbers:[module_num:14|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notes:['Renumber the nuclei objects to match their parents. Has the effect of merging separate objects within the same parent.']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
    Select the input objects:NucleiPreliminary
    Name the new objects:NucleiPreliminaryRelated
    Operation to perform:Unify
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    Retain outlines of the relabeled objects?:No
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    Unification to perform:Per-parent
    Select the parent object:CellsFilteredByLowMarkerIntensity

Smooth:[module_num:15|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notes:['Smooth the image to remove the effect of noise.']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
    Select the input image:MTSmCerNormalized
    Name the output image:MTSmCerNormalizedSmoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2.0
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
MaskImage:[module_num:16|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notes:['Mask the image by the cell objects to allow per-object thresholding.']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
    Select the input image:MTSmCerNormalizedSmoothed
    Name the output image:MTSmCerNormalizedSmoothedMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsFilteredByLowMarkerIntensity
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:17|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notes:['Find the mitochondria.']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
    Select the input image:MTSmCerNormalizedSmoothedMasked
    Name the primary objects to be identified:MitochondriaPreliminary
    Typical diameter of objects, in pixel units (Min,Max):2,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground PerObject
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
RelateObjects:[module_num:18|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notes:['Relate the mitochondrial objects to the parent cells.']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
    Select the input child objects:MitochondriaPreliminary
    Select the input parent objects:CellsFilteredByLowMarkerIntensity
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:No
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
ReassignObjectNumbers:[module_num:19|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notes:['Renumber the nuclei objects to match their parents. Has the effect of merging separate objects within the same parent.']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
    Select the input objects:MitochondriaPreliminary
    Name the new objects:MitochondriaPreliminaryRelated
    Operation to perform:Unify
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    Retain outlines of the relabeled objects?:No
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    Unification to perform:Per-parent
    Select the parent object:CellsFilteredByLowMarkerIntensity

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:CellsFilteredByLowMarkerIntensity
    Select objects to measure:NucleiPreliminaryRelated
    Select objects to measure:MitochondriaPreliminaryRelated
    Calculate the Zernike features?:No

CalculateMath:[module_num:21|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notes:['Calculate the fractional area of each cell which is taken up by the nucleus.']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
    Name the output measurement:FractionNuclear
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:NucleiPreliminaryRelated
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CellsFilteredByLowMarkerIntensity
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
    Set values less than this to this value?:0
    Constrain the result to an upper bound?:No
    Set values greater than this to this value?:1

CalculateMath:[module_num:22|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notes:['Calculate the fractional area of each cell which is taken up by the mitochondria.']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
    Name the output measurement:FractionMitochondria
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:MitochondriaPreliminaryRelated
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CellsFilteredByLowMarkerIntensity
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
    Set values less than this to this value?:0
    Constrain the result to an upper bound?:No
    Set values greater than this to this value?:1

FilterObjects:[module_num:23|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notes:['Remove cells which have overly large nuclei (>25% area) or mitochondria (>50% area). When objects take up this much of the cell, they tend to be due to a cell with badly-localized marker proteins.']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
    Name the output objects:CellsFilteredByMaximumCompartmentSize
    Select the object to filter:CellsFilteredByLowMarkerIntensity
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:2
    Select the measurement to filter by:Math_FractionNuclear
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.25
    Select the measurement to filter by:Math_FractionMitochondria
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
    Select additional object to relabel:NucleiPreliminaryRelated
    Name the relabeled objects:NucleiFilteredByMaximumCompartmentSize
    Retain outlines of relabeled objects?:No
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    Select additional object to relabel:MitochondriaPreliminaryRelated
    Name the relabeled objects:MitochondriaFilteredByMaximumCompartmentSize
    Retain outlines of relabeled objects?:No
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
ExpandOrShrinkObjects:[module_num:24|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notes:['Expand the nuclei object by 1 pixel.']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
    Select the input objects:NucleiFilteredByMaximumCompartmentSize
    Name the output objects:NucleiExpanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:No
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
ExpandOrShrinkObjects:[module_num:25|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notes:['Expand the mitochondria object by 1 pixel.']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
    Select the input objects:MitochondriaFilteredByMaximumCompartmentSize
    Name the output objects:MitochondriaExpanded
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects for use later in the pipeline (for example, in SaveImages)?:No
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
MaskObjects:[module_num:26|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notes:['Remove those nuclear pixels that are also part of the expanded mitochondria in order to obtain the portion of the cell which is purely nuclear.']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
    Select objects to be masked:NucleiFilteredByMaximumCompartmentSize
    Name the masked objects:PureNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object(s):MitochondriaExpanded
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MaskObjects:[module_num:27|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notes:['Remove those mitochondrial pixels that are also part of the expanded nucleus in order to obtain the portion of the cell which is purely mitochondrial.']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
    Select objects to be masked:MitochondriaFilteredByMaximumCompartmentSize
    Name the masked objects:PureMitochondria
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object(s):NucleiExpanded
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

RelateObjects:[module_num:28|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notes:['Relate the pure nuclei to the parent cells. Note: Must be placed after CalculateMath.']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
    Select the input child objects:PureNuclei
    Select the input parent objects:CellsFilteredByMaximumCompartmentSize
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:29|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notes:['Relate the pure mitochondria to the parent cells. Note: Must be placed after CalculateMath.']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
    Select the input child objects:PureMitochondria
    Select the input parent objects:CellsFilteredByMaximumCompartmentSize
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:No
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
ReassignObjectNumbers:[module_num:30|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
    Select the input objects:PureNuclei
    Name the new objects:RelabeledPureNuclei
    Operation to perform:Unify
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    Retain outlines of the relabeled objects?:No
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    Unification to perform:Per-parent
    Select the parent object:CellsFilteredByMaximumCompartmentSize

ReassignObjectNumbers:[module_num:31|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
    Select the input objects:PureMitochondria
    Name the new objects:RelabeledPureMitochondria
    Operation to perform:Unify
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    Retain outlines of the relabeled objects?:No
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    Unification to perform:Per-parent
    Select the parent object:CellsFilteredByMaximumCompartmentSize

MeasureObjectSizeShape:[module_num:32|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
    Select objects to measure:CellsFilteredByMaximumCompartmentSize
    Select objects to measure:RelabeledPureNuclei
    Select objects to measure:RelabeledPureMitochondria
    Calculate the Zernike features?:No

CalculateMath:[module_num:33|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notes:['Calculate the fractional area of each cell which is taken up by pure nucleus.']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
    Name the output measurement:FractionPureNuclear
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:RelabeledPureNuclei
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CellsFilteredByMaximumCompartmentSize
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
    Set values less than this to this value?:0
    Constrain the result to an upper bound?:No
    Set values greater than this to this value?:1

CalculateMath:[module_num:34|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notes:['Calculate the fractional area of each cell which is taken up by pure mitochondria.']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
    Name the output measurement:FractionPureMitochondria
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:RelabeledPureMitochondria
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:CellsFilteredByMaximumCompartmentSize
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
    Set values less than this to this value?:0
    Constrain the result to an upper bound?:No
    Set values greater than this to this value?:1

FilterObjects:[module_num:35|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notes:['Remove those cells containing less than 1% of their area as pure nuclei or pure mitochondria objects. This is to ensure that a large enough pixels remain for a robust measure.']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
    Name the output objects:CellsFilteredByMinimumCompartmentSize
    Select the object to filter:CellsFilteredByMaximumCompartmentSize
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:4
    Additional object count:2
    Select the measurement to filter by:Math_FractionPureNuclear
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_FractionPureMitochondria
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_PureNuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_PureMitochondria_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:PureNuclei
    Name the relabeled objects:PureNucleiFilteredByMinimumCompartmentSize
    Retain outlines of relabeled objects?:No
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    Select additional object to relabel:PureMitochondria
    Name the relabeled objects:PureMitochondriaFilteredByMinimumCompartmentSize
    Retain outlines of relabeled objects?:No
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
IdentifyTertiaryObjects:[module_num:36|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
    Select the larger identified objects:CellsFilteredByMinimumCompartmentSize
    Select the smaller identified objects:NucleiExpanded
    Name the tertiary objects to be identified:PreCytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink primary object?:No

IdentifyTertiaryObjects:[module_num:37|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
    Select the larger identified objects:PreCytoplasm
    Select the smaller identified objects:MitochondriaExpanded
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink primary object?:No

SaveImages:[module_num:38|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notes:['Save the final, filtered cells object.', "Q-SCAn Program: The file name suffix wiithin parentheses will be overridden unless the manual setting is checked. The prefix can be safely changed, but don't use parentheses"]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
    Select the type of image to save:Objects
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    Select the objects to save:CellsFilteredByMinimumCompartmentSize
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    Select method for constructing file names:Single name
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    Enter single file name:Cells Filtered (\\\\g<Strain> - \\\\g<Field>)
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    Select file format to use:png
    Output file location:Default Output Folder sub-folder|Objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:39|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notes:['Save the pure nuclei object.', "Q-SCAn Program: The file name suffix wiithin parentheses will be overridden unless the manual setting is checked. The prefix can be safely changed, but don't use parentheses"]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
    Select the type of image to save:Objects
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    Select the objects to save:PureNucleiFilteredByMinimumCompartmentSize
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    Select method for constructing file names:Single name
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    Enter single file name:Pure Nuclei (\\\\g<Strain> - \\\\g<Field>)
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    Select file format to use:png
    Output file location:Default Output Folder sub-folder|Objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:40|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notes:['Save the pure mitochondria object.', "Q-SCAn Program: The file name suffix wiithin parentheses will be overridden unless the manual setting is checked. The prefix can be safely changed, but don't use parentheses"]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
    Select the type of image to save:Objects
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    Select the objects to save:PureMitochondriaFilteredByMinimumCompartmentSize
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    Select method for constructing file names:Single name
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    Enter single file name:Pure Mitochondria (\\\\g<Strain> - \\\\g<Field>)
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    Select file format to use:png
    Output file location:Default Output Folder sub-folder|Objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:41|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notes:['Save the cytosol object.', "Q-SCAn Program: The file name suffix wiithin parentheses will be overridden unless the manual setting is checked. The prefix can be safely changed, but don't use parentheses"]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
    Select the type of image to save:Objects
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    Select the objects to save:Cytoplasm
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    Select method for constructing file names:Single name
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    Enter single file name:Cytoplasm (\\\\g<Strain> - \\\\g<Field>)
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    Select file format to use:png
    Output file location:Default Output Folder sub-folder|Objects
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:42|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notes:['Export the number of whole cells identified (Cells), the number left after removing low marker-expressing cells (CellsFiltered), and the number left after that and those with too small or too large compartments (CellsFiltered4).', 'Q-SCAn Program: The exported metadata fields will be overridden unless the manual setting is checked.']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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Output Data
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Image|Count_Cells,Image|Count_CellsFilteredByMaximumCompartmentSize,Image|Count_CellsFilteredByLowMarkerIntensity,Image|Count_CellsFilteredByMinimumCompartmentSize,Image|Metadata_Strain,Image|Metadata_Field
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Cell Filtering Data.csv
    Use the object name for the file name?:No
