CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20130716184944

LoadImages:[module_num:1|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notes:[u'Load each channel of the image to be analyzed this round.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Corrected Images
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):Ch3-T1
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:NLStdTom
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch2-T3
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:MTSmCer
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch2-T2
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:GFP
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    Rescale intensities?:Yes

LoadImages:[module_num:2|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notes:['Load the filtered cell objects.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Objects
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Cells (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Cells
    Retain outlines of loaded objects?:No
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
Smooth:[module_num:3|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notes:['Smooth the image subtly to remove noise.']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
    Select the input image:NLStdTom
    Name the output image:FilteredNLStdTom
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2
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
Smooth:[module_num:4|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notes:['Smooth the image subtly to remove noise.']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
    Select the input image:MTSmCer
    Name the output image:FilteredMTSmCer
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2
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
Smooth:[module_num:5|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notes:['Smooth the image subtly to remove noise.']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
    Select the input image:GFP
    Name the output image:FilteredGFP
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2
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
MaskImage:[module_num:6|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notes:['Mask the image to only get the cell pixels.']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
    Select the input image:FilteredNLStdTom
    Name the output image:MaskedNLStdTom
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:7|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notes:['Mask the image to only get the cell pixels.']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
    Select the input image:FilteredMTSmCer
    Name the output image:MaskedMTSmCer
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

MaskImage:[module_num:8|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notes:['Mask the image to only get the cell pixels.']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
    Select the input image:FilteredGFP
    Name the output image:MaskedGFP
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

SaveImages:[module_num:9|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notes:['Save the images out for ImageJ to export the pixel data.']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
    Select the type of image to save:Image
    Select the image to save:MaskedNLStdTom
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    Select method for constructing file names:From image filename
    Select image name for file prefix:NLStdTom
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:tif
    Output file location:Default Output Folder sub-folder|Masked Smoothed Images for Crosstalk Analysis
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:10|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notes:['Save the images out for ImageJ to export the pixel data.']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
    Select the type of image to save:Image
    Select the image to save:MaskedMTSmCer
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    Select method for constructing file names:From image filename
    Select image name for file prefix:MTSmCer
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:tif
    Output file location:Default Output Folder sub-folder|Masked Smoothed Images for Crosstalk Analysis
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:11|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notes:['Save the images out for ImageJ to export the pixel data.']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
    Select the type of image to save:Image
    Select the image to save:MaskedGFP
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Do you want to add a suffix to the image file name?:No
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    Select file format to use:tif
    Output file location:Default Output Folder sub-folder|Masked Smoothed Images for Crosstalk Analysis
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No
