CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20130716190332

LoadImages:[module_num:1|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notes:['Load the fluorescence channels used for compartment identification.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Fully Corrected Images
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Ch3-T1
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:NLStdTom
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):Ch2-T3
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:MTSmCer
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    Rescale intensities?:Yes

LoadImages:[module_num:2|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notes:['Load the cell objects.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder sub-folder|Objects
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):Cells (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Cells
    Retain outlines of loaded objects?:No
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
RescaleIntensity:[module_num:3|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notes:['Normalize the image so that the mean of the intensities within cells for the fluorophor = 0.01. This value is determined by dividing the cross-dataset intensity sum and area sum to find the mean cellular intensity for the marker. This number must be multiplied by 100 and entered here.']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
    Select the input image:NLStdTom
    Name the output image:NLStdTomNormalized
    Select rescaling method:Divide each image by the same value
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    Enter the divisor:1.101399543
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
RescaleIntensity:[module_num:4|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notes:['Normalize the image so that the mean of the intensities within cells for the fluorophor = 0.01. This value is determined by dividing the cross-dataset intensity sum and area sum to find the mean cellular intensity for the marker. This number must be multiplied by 100 and entered here.']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
    Select the input image:MTSmCer
    Name the output image:MTSmCerNormalized
    Select rescaling method:Divide each image by the same value
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    Enter the divisor:0.730259059
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
MeasureObjectIntensity:[module_num:5|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
    Hidden:2
    Select an image to measure:NLStdTomNormalized
    Select an image to measure:MTSmCerNormalized
    Select objects to measure:Cells

ExportToSpreadsheet:[module_num:6|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Output Data
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Filtering Analysis Image Data.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Filtering Analysis Cell Intensity Data.csv
    Use the object name for the file name?:No
