CellProfiler Pipeline: http://www.cellprofiler.org
Version:2
DateRevision:20130716190332

LoadImages:[module_num:1|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notes:[u'Load each channel of the image to be analyzed this round.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Corrected Images
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):Ch3-T1
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:NLStdTom
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch2-T3
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:MTSmCer
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):Ch2-T2
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:GFP
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    Rescale intensities?:No

LoadImages:[module_num:2|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notes:['Load cell, nuclei, mitochondria, and cytosol objects.']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder sub-folder|Objects
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:4
    Text that these images have in common (case-sensitive):Cells Filtered (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) (?P<Colony>\\\\S*) (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Cells
    Retain outlines of loaded objects?:No
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    Text that these images have in common (case-sensitive):Pure Nuclei (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Nuclei
    Retain outlines of loaded objects?:No
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    Text that these images have in common (case-sensitive):Pure Mitochondria (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Mitochondria
    Retain outlines of loaded objects?:No
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    Text that these images have in common (case-sensitive):Cytosol (
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:\\\\((?P<Strain>.*) - (?P<Colony>\\\\S*) - (?P<Field>\\\\S*)\\\\)
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    Channel count:1
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    Load the input as images or objects?:Objects
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    Name this loaded object:Cytosol
    Retain outlines of loaded objects?:No
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
Smooth:[module_num:3|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notes:['Smooth the image subtly to remove the influence of noise.']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
    Select the input image:NLStdTom
    Name the output image:NLStdTomFiltered
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2
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
Smooth:[module_num:4|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notes:['Smooth the image subtly to remove the influence of noise.']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
    Select the input image:MTSmCer
    Name the output image:MTSmCerFiltered
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2
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
Smooth:[module_num:5|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notes:['Smooth the image subtly to remove the influence of noise.']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
    Select the input image:GFP
    Name the output image:GFPFiltered
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:2
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
ImageMath:[module_num:6|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notes:['Apply crosstalk correction for NLStdTom and MTSmCer signal appearing in GFP channel.']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
    Operation:Add
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GFPFilteredCrosstalkCorrected
    Image or measurement?:Image
    Select the first image:GFPFiltered
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:NLStdTomFiltered
    Multiply the second image by:-0.0145417
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    Image or measurement?:Image
    Select the third image:MTSmCerFiltered
    Multiply the third image by:-0.0838191
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:GFPFilteredCrosstalkCorrected
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Mitochondria
    Select objects to measure:Cytosol

ExportToSpreadsheet:[module_num:8|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notes:['Save the data.']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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Output Data
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
    Press button to select measurements to export:Cytosol|Intensity_MeanIntensity_GFPFilteredCrosstalkCorrected,Mitochondria|Intensity_MeanIntensity_GFPFilteredCrosstalkCorrected,Nuclei|Intensity_MeanIntensity_GFPFilteredCrosstalkCorrected,Cells|Intensity_MeanIntensity_GFPFilteredCrosstalkCorrected
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Compartment GFP Intensities.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:Yes
    File name:Nuclei GFP Intensities.csv
    Use the object name for the file name?:No
    Data to export:Mitochondria
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cytosol
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
